<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindBehaviorTelekinesisDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.VersionControl;assembly=AllenNeuralDynamics.VersionControl"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p4="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:p5="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:p6="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:p7="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p8="clr-namespace:AllenNeuralDynamics.Core.Design;assembly=AllenNeuralDynamics.Core.Design"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" DisplayName="TaskPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath />
        <RigPath />
        <SessionPath />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Session" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorTelekinesisRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorTelekinesisTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Hardware.bonsai" />
      <Expression xsi:type="GroupWorkflow">
        <Name>SessionSettings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RngSeed</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateContinuousUniform">
                <p2:Lower>0</p2:Lower>
                <p2:Upper>10</p2:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>CheckNull</scr:Name>
              <scr:Expression>Item1.HasValue ? Item1.Value : Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeedValue</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Seed" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:CreateRepository">
                <p3:Path>../.</p3:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Repository</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SessionName" Selector="SessionName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DataDirectory</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RootFolder" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai">
              <RootFolder />
              <SessionName xsi:nil="true" />
              <SubjectName>LoggingRootPath</SubjectName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>CompoundRootPath</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="20" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Annotation">
              <Name>Label</Name>
              <Text><![CDATA[new(
Item1.Seconds as Seconds,
Item1.Value as CachedProjectedAction,
Item2.Item1 as TrialAction,
Item2.Item2 as UpperThr,
Item2.Item3 as LowerThr)]]></Text>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(harp:Timestamped(sys:Double),sys:Tuple(p1:Action,sys:Double,sys:Double))">
              <rx:Name>LiveHarvestOutcome</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Double,p1:ContinuousFeedback)">
              <rx:Name>ContinuousFeedbackMonitor</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p5:Mat">
              <rx:Name>CurrentLut</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p6:SoftwareEvent">
              <rx:Name>SoftwareEvents</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p6:SoftwareEvent">
              <rx:Name>RuntimeLogging</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Nullable(sys:Double)">
              <rx:Name>OverrideUpperThreshold</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
              <rx:Name>StartLogging</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>Annotations</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p7:CreateSoftwareEvent">
                <p7:EventName>TrialNumber</p7:EventName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoftwareEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ExperimentState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsExperimentPaused</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="25" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="25" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source3" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HardwareChecks</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:Defer">
              <Name>ProtocolValidation</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraChecks</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggeredCamerasStream</Name>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>CheckDroppedFrames</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>InputSequence</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>InputSequence</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value.ChunkData</Selector>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>FrameID</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Difference">
                                  <dsp:Order>1</dsp:Order>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Subtract">
                                <Operand xsi:type="DoubleProperty">
                                  <Value>1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="GreaterThan">
                                <Operand xsi:type="DoubleProperty">
                                  <Value>0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>InputSequence</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="13" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source2" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="15" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>Camera {0} dropped frame detected during pre-session!</Format>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="Message" Selector="it" />
                          </PropertyMappings>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p7:ThrowException">
                            <p7:Message>Dropped frame detected during pre-session!</p7:Message>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StartExperiment</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggeredCameraController</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Cameras</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>CheckCameraSettings</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>ThisCamera</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisCamera</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value.Exposure</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TriggeredCameraController</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>FrameRate</Selector>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>((1.0 / Item2) * 1000000) &lt; double(Item1) + 1000</scr:Expression>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisCamera</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="8" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source2" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="14" Label="Source1" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source2" />
                              <Edge From="14" To="15" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>Camera {0} exposure setting not compatible with requested frame rate!</Format>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="Message" Selector="it" />
                          </PropertyMappings>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p7:ThrowException">
                            <p7:Message>Dropped frame detected during pre-session!</p7:Message>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggeredCameraController</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>FrameRate.HasValue</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p7:ThrowException">
                            <p7:Message>TriggeredCameraControl must specify a valid FrameRate property!</p7:Message>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggeredCamerasStream</Name>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>OnlineQC</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>InputSequence</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>InputSequence</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value.ChunkData</Selector>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Timestamp</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Difference">
                                  <dsp:Order>1</dsp:Order>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Multiply">
                                <Operand xsi:type="DoubleProperty">
                                  <Value>1E-09</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Seconds</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Difference">
                                  <dsp:Order>1</dsp:Order>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Subtract" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Abs" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="JitterThreshold" />
                              </Expression>
                              <Expression xsi:type="GreaterThan">
                                <Operand xsi:type="DoubleProperty">
                                  <Value>0.0005</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:ObserveOn">
                                  <rx:Scheduler>TaskPoolScheduler</rx:Scheduler>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Period" DisplayName="SnoozeTime" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Timer">
                                  <rx:DueTime>PT0S</rx:DueTime>
                                  <rx:Period>PT10S</rx:Period>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Gate" />
                              </Expression>
                              <Expression xsi:type="rx:SelectMany">
                                <Name>MakeUI</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>InputSequence</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Key</Selector>
                                    </Expression>
                                    <Expression xsi:type="Format">
                                      <Format>Camera {0} out-of-alignment qc was triggered.</Format>
                                      <Selector>it</Selector>
                                    </Expression>
                                    <Expression xsi:type="InputMapping">
                                      <PropertyMappings>
                                        <Property Name="Text" Selector="it" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p8:MessageBox">
                                        <p8:Text />
                                        <p8:Title>Warning</p8:Title>
                                        <p8:MessageBoxIcon>Exclamation</p8:MessageBoxIcon>
                                      </Combinator>
                                    </Expression>
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="4" To="9" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="11" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source2" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="15" Label="Source1" />
                              <Edge From="14" To="15" Label="Source2" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="17" Label="Source1" />
                              <Edge From="17" To="20" Label="Source1" />
                              <Edge From="18" To="19" Label="Source1" />
                              <Edge From="19" To="20" Label="Source2" />
                              <Edge From="20" To="21" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Repository</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:IsRepositoryClean">
                      <p3:IgnoreUntracked>false</p3:IgnoreUntracked>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SubjectSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AllowDirtyRepo</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>AllowDirty?</scr:Name>
                    <scr:Expression>Item2 ? False : Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p7:ThrowException">
                      <p7:Message>Repository is not clean! Please discard all local changes.</p7:Message>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ValidateHarpClkOutput.bonsai" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SkipHardwareValidation</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\OperationControl.bonsai" />
      <Expression xsi:type="rx:Defer">
        <Name>TaskLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PermutateBlocks</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Environment</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Shuffle</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Shuffle</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>BlockStatistics</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RngSeed</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Permutation" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>DontShuffle</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Shuffle</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>BlockStatistics</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToList" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="10" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BlockStatistics</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BlockIndex</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BlockStatistics</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BlockIndex</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ActiveBlock</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\CreateSoftwareEventInline.bonsai">
              <EventName>ActiveBlock</EventName>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\BlockLogic.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>BlockIndex++</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BlockIndex</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BlockIndex</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="rx:TakeWhile">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BlockIndex</Name>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BlockStatistics</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Count</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="LessThanOrEqual" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Visualizers.bonsai" />
      <Expression xsi:type="ui:VisualizerWindow">
        <ui:VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
        <ui:Text>Telekinesis</ui:Text>
        <ui:Visible>true</ui:Visible>
        <ui:Location xsi:nil="true" />
        <ui:Size xsi:nil="true" />
        <ui:WindowState>Maximized</ui:WindowState>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Logging.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartCondition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
              <rx:Name>StartExperimentShortcut</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggeredCamerasReady</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartLogging</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="LogDelay" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT3S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>EndRoutine</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>HomeMotors</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IsHomed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="9" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>